PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant': '', 'design': '1', 'position': '2'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1792, 1120]
  expName = configural_featural
  logging level = debug
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser=window;

        random=Math.random;
        randint=function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }

        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        function divide_subPoint1(array, divisor) {
            let array_divided = array.map(function(element) {
                return element/divisor - 0.1;
            });
            return array_divided
        }

        function round_array(array) {
            array = array.map(function(each_element){
                return Math.round(each_element);
            });
            return array
        }

        psychoJS.downloadResources([{name: ("Stimuli/greenCheck.png"), path:("Stimuli/greenCheck.png")},
        {name: ("Stimuli/redWrong.png"), path:("Stimuli/redWrong.png")},
        {name: ("Stimuli/edmd.png"), path:("Stimuli/edmd.png")},
        {name: ("Stimuli/eimd.png"), path:("Stimuli/eimd.png")},
        {name: ("Stimuli/eomu.png"), path:("Stimuli/eomu.png")},
        {name: ("Stimuli/eumu.png"), path:("Stimuli/eumu.png")},
        {name: ("Stimuli/f15.png"), path:("Stimuli/f15.png")},
        {name: ("Stimuli/f24.png"), path:("Stimuli/f24.png")},
        {name: ("Stimuli/f131.png"), path:("Stimuli/f131.png")},
        {name: ("Stimuli/f142.png"), path:("Stimuli/f142.png")},
        {name: ("Stimuli/H-8sim0.png"), path:("Stimuli/H-8sim0.png")},
        {name: ("Stimuli/H-8sim1.png"), path:("Stimuli/H-8sim1.png")},
        {name: ("Stimuli/H-8sim2.png"), path:("Stimuli/H-8sim2.png")},
        {name: ("Stimuli/H-8sim3.png"), path:("Stimuli/H-8sim3.png")},
        {name: ("Stimuli/H5sim0.png"), path:("Stimuli/H5sim0.png")},
        {name: ("Stimuli/H6sim0.png"), path:("Stimuli/H6sim0.png")},
        {name: ("Stimuli/H7sim0.png"), path:("Stimuli/H7sim0.png")},
        {name: ("Stimuli/H8sim0.png"), path:("Stimuli/H8sim0.png")},
        {name: ("Stimuli/dory1.png"), path:("Stimuli/dory1.png")},
        {name: ("Stimuli/dory2.png"), path:("Stimuli/dory2.png")},
        {name: ("Stimuli/nemo1.jpg"), path:("Stimuli/nemo1.jpg")},
        {name: ("Stimuli/nemo2.png"), path:("Stimuli/nemo2.png")},
        {name: ("Designs/design1.csv"), path:("Designs/design1.csv")},
        {name: ("Designs/design2.csv"), path:("Designs/design2.csv")},
        {name: ("Designs/design3.csv"), path:("Designs/design3.csv")},
        {name: ("Designs/design4.csv"), path:("Designs/design4.csv")},
        {name: ("Designs/design5.csv"), path:("Designs/design5.csv")},
        {name: ("Designs/design6.csv"), path:("Designs/design6.csv")},
        {name: ("Designs/design7.csv"), path:("Designs/design7.csv")},
        {name: ("Designs/design8.csv"), path:("Designs/design8.csv")},
        {name: ("Designs/instructions_face_1234.png"), path:("Designs/instructions_face_1234.png")},
        {name: ("Designs/instructions_face_5678.png"), path:("Designs/instructions_face_5678.png")},
        {name: ("Designs/instructions_haus_1234.png"), path:("Designs/instructions_haus_1234.png")},
        {name: ("Designs/instructions_haus_5678.png"), path:("Designs/instructions_haus_5678.png")},
        {name: ("Designs/prac_instr1.png"), path:("Designs/prac_instr1.png")},
        {name: ("Designs/prac_instr2_1234.png"), path:("Designs/prac_instr2_1234.png")},
        {name: ("Designs/prac_instr2_5678.png"), path:("Designs/prac_instr2_5678.png")},
        {name: ("Designs/prac_instr3_corr.png"), path:("Designs/prac_instr3_corr.png")},
        {name: ("Designs/prac_instr3_wrong.png"), path:("Designs/prac_instr3_wrong.png")},
        {name: ("Designs/prac_instr4_1234.png"), path:("Designs/prac_instr4_1234.png")},
        {name: ("Designs/prac_instr4_5678.png"), path:("Designs/prac_instr4_5678.png")},
        {name: ("Designs/prac_instr5_1234_corr.png"), path:("Designs/prac_instr5_1234_corr.png")},
        {name: ("Designs/prac_instr5_5678_corr.png"), path:("Designs/prac_instr5_5678_corr.png")},
        {name: ("Designs/prac_instr5_1234_wrong.png"), path:("Designs/prac_instr5_1234_wrong.png")},
        {name: ("Designs/prac_instr5_5678_wrong.png"), path:("Designs/prac_instr5_5678_wrong.png")}]);

        expInfo['OS'] = window.navigator.platform;
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    CodeComponent code_Py
      Code Type = Py
      Begin Experiment:
        from numpy.random import permutation
        from numpy.random import shuffle

        expInfo['winSize'] = win.size;
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        # h = tan(degrees = 2) x (distance = 49.53)
        height =  1.7296*2
        #width = 1.7296*2
        #width3deg = 2.5958
        width = 3.47618705978
        width4deg = 3.47618705978
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      color = black
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Resize this image to match the size of a credit card with arrow keys
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    TextComponent text_bottom
      color = black
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press Space when you’re finished
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    ImageComponent ccimage
      image = bankcard.png
      saveStartStop = False
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      texture resolution = 512
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  Routine target_img
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        img_pair = 0
        target = 0
        probe = 0
        corr = 0
        trialID = trialID + 1

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            if trial_order[trialID]==1:
                sameTrialid += 1
                if side_same == 1: #left
                    xPosition = -(width4deg*x_scale)
                    sameTrial_left_id += 1
                    target = paths[trialSame_left[sameTrial_left_id]]
                    probe = paths[trialSame_left[sameTrial_left_id]]
                    if int(expInfo['design']) < 5:
                        corr = 'f'
                    elif int(expInfo['design']) > 4:
                        corr = 'j'
                elif side_same == 0: #right
                    xPosition = width4deg*x_scale
                    sameTrial_right_id += 1
                    target = paths[trialSame_right[sameTrial_right_id]]
                    probe = paths[trialSame_right[sameTrial_right_id]]
                    if int(expInfo['design']) < 5:
                        corr = 'f'
                    elif int(expInfo['design']) > 4:
                        corr = 'j'
            elif trial_order[trialID]==0:
                diffTrialid += 1
                if side_diff == 1: #left
                    xPosition = -(width4deg*x_scale)
                    diffTrial_left_id += 1
                    print(diffTrial_left_id)
                    print(trialDiff_left[diffTrial_left])
                    img_pair = trialDiff_left[diffTrial_left[diffTrial_left_id]]
                    target = paths[img_pair[0]]
                    probe = paths[img_pair[1]]
                    if int(expInfo['design']) < 5:
                        corr = 'j'
                    elif int(expInfo['design']) > 4:
                        corr = 'f'
                elif side_diff == 0: #right
                    xPosition = width4deg*x_scale
                    diffTrial_right_id += 1
                    print(diffTrial_right_id)
                    print(trialDiff_right[diffTrial_right])
                    img_pair = trialDiff_right[diffTrial_right[diffTrial_right_id]]
                    target = paths[img_pair[0]]
                    probe = paths[img_pair[1]]
                    if int(expInfo['design']) < 5:
                        corr = 'j'
                    elif int(expInfo['design']) > 4:
                        corr = 'f'
        elif int(expInfo['position']) == 1:
            xPosition = -(width4deg*x_scale)
            if trial_order[trialID]==1:
                sameTrialid += 1
                target = paths[trialSame[sameTrialid]]
                probe = paths[trialSame[sameTrialid]]
                if int(expInfo['design']) < 5:
                    corr = 'f'
                elif int(expInfo['design']) > 4:
                    corr = 'j'
            elif trial_order[trialID]==0:
                diffTrialid += 1
                img_pair = trialDiff[diffTrial[diffTrialid]]
                target = paths[img_pair[0]]
                probe = paths[img_pair[1]]
                if int(expInfo['design']) < 5:
                    corr = 'j'
                elif int(expInfo['design']) > 4:
                    corr = 'f'
        elif int(expInfo['position']) == 3:
            xPosition = width4deg*x_scale
            if trial_order[trialID]==1:
                sameTrialid += 1
                target = paths[trialSame[sameTrialid]]
                probe = paths[trialSame[sameTrialid]]
                if int(expInfo['design']) < 5:
                    corr = 'f'
                elif int(expInfo['design']) > 4:
                    corr = 'j'
            elif trial_order[trialID]==0:
                diffTrialid += 1
                img_pair = trialDiff[diffTrial[diffTrialid]]
                target = paths[img_pair[0]]
                probe = paths[img_pair[1]]
                if int(expInfo['design']) < 5:
                    corr = 'j'
                elif int(expInfo['design']) > 4:
                    corr = 'f'

        thisExp.addData('fix_switches', fix_switch[trialID])
        thisExp.addData('side', xPosition)
        thisExp.addData('trial_type1S0D',trial_order[trialID])
        thisExp.addData('target',target)
        thisExp.addData('probe',probe)
        thisExp.addData('block_type',Block_type)
    TextComponent text_4
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    ImageComponent target_image
      image [set every repeat] = $target
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $img_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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  Routine probe_img
    TextComponent text_5
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    ImageComponent probe_image
      image [set every repeat] = $probe
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $img_size
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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  Routine startInstruct
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        fix_color_options = ["white","black"];
        block_count = -1
        if int(expInfo['design']) == 1:
            design_file = 'Designs/design1.csv'
        elif int(expInfo['design']) == 2:
            design_file = 'Designs/design2.csv'
        elif int(expInfo['design']) == 3:
            design_file = 'Designs/design3.csv'
        elif int(expInfo['design']) == 4:
            design_file = 'Designs/design4.csv'
        elif int(expInfo['design']) == 5:
            design_file = 'Designs/design5.csv'
        elif int(expInfo['design']) == 6:
            design_file = 'Designs/design6.csv'
        elif int(expInfo['design']) == 7:
            design_file = 'Designs/design7.csv'
        elif int(expInfo['design']) == 8:
            design_file = 'Designs/design8.csv'
    TextComponent text_3
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Now you are ready to play the game!

        You will be doing the same thing you just practiced. The pictures come fast, but try your best!

        Press <SPACE> to see the instructions!
    KeyboardComponent key_resp_7
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_resp
    TextComponent text_2
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp
      allowedKeys = 'f','j'
      correctAns = $corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine ISI_fix
    TextComponent text
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
      text = +
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  Routine instrBlock
    CodeComponent code_3
      Code Type = Both
      Begin Experiment:
        start_side = [0,1]
        shuffle(start_side)
        start_side = start_side[0]
      Begin JS Experiment:
        start_side = shuffle_array([0,1])
        start_side = start_side[0]
      Begin JS Routine:
        // add-on: list(s: string): string[]
        function list(s) {
            // if s is a string, we return a list of its characters
            if (typeof s === 'string')
                return s.split('');
            else
                // otherwise we return s:
                return s;
        }

        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        function divide_subPoint1(array, divisor) {
            let array_divided = array.map(function(element) {
                return element/divisor - 0.1;
            });
            return array_divided
        }

        function round_array(array) {
            array = array.map(function(each_element){
                return Math.round(each_element);
            });
            return array
        }

        img_size="";
        block_count = block_count + 1;
        corrFix_count = 0;
        missFix_count = 0;
        if ((Block_type === "conf_face")) {
            img_size = (width*x_scale*0.67,height*y_scale)
            paths = ["Stimuli/edmd.png", "Stimuli/eimd.png", "Stimuli/eomu.png", "Stimuli/eumu.png"];
            if ((Number.parseInt(expInfo["design"]) < 5)) {
                instruction_img = "Designs/instructions_face_1234.png";
            } else {
                instruction_img = "Designs/instructions_face_5678.png";
            }
        } else {
            if ((Block_type === "conf_haus")) {
                img_size = (width*x_scale*1.36,height*y_scale)
                paths = ["Stimuli/H-8sim0.png", "Stimuli/H-8sim1.png", "Stimuli/H-8sim2.png", "Stimuli/H-8sim3.png"];
                if ((Number.parseInt(expInfo["design"]) < 5)) {
                    instruction_img = "Designs/instructions_haus_1234.png";
                } else {
                    instruction_img = "Designs/instructions_haus_5678.png";
                }
            } else {
                if ((Block_type === "feat_face")) {
                    img_size = (width*x_scale*0.67,height*y_scale)
                    paths = ["Stimuli/f15.png", "Stimuli/f24.png", "Stimuli/f131.png", "Stimuli/f142.png"];
                    if ((Number.parseInt(expInfo["design"]) < 5)) {
                        instruction_img = "Designs/instructions_face_1234.png";
                    } else {
                        instruction_img = "Designs/instructions_face_5678.png";
                    }
                } else {
                    if ((Block_type === "feat_haus")) {
                        img_size = (width*x_scale*1.36,height*y_scale)
                        paths = ["Stimuli/H5sim0.png", "Stimuli/H6sim0.png", "Stimuli/H7sim0.png", "Stimuli/H8sim0.png"];
                        if ((Number.parseInt(expInfo["design"]) < 5)) {
                            instruction_img = "Designs/instructions_haus_1234.png";
                        } else {
                            instruction_img = "Designs/instructions_haus_5678.png";
                        }
                    }
                }
            }
        }

        trialSame = 0;
        trialDiff = 0;
        diffTrial = 0;
        sameTrialid = -1;
        diffTrialid = -1;
        sameTrial_left_id = -1;
        diffTrial_left_id = -1;
        sameTrial_right_id = -1;
        diffTrial_right_id = -1;
        trialID = -1;
        rand_start = shuffle_array([0,1]);
        fix_color = fix_color_options[rand_start[0]];

        if ((Number.parseInt(expInfo["position"]) === 2)) {
            numTrials = 48;
            trial_order = [shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]),shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6])].flat();
            trial_order = round_array(divide_subPoint1(trial_order,6))
            trialSame_left = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
            trialDiff_left = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2], [0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
            diffTrial_left = shuffle_array(list([...Array(24).keys()]));
            trialSame_right = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
            trialDiff_right = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2], [0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
            diffTrial_right = shuffle_array(list([...Array(24).keys()]));
            fix_switch = [[0,0],shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),shuffle_array([1,0,0]),[0],shuffle_array([1,0,0]),[0,0]].flat();
            if ((block_count === 0)) {
                if ((start_side === 0)) {
                    side_same = 0;
                    side_diff = 0;
                } else {
                    side_same = 1;
                    side_diff = 1;
                }
            } else {
                if ((block_count < 5)) {
                    if ((start_side === 0)) {
                        side_same = 0;
                        side_diff = 0;
                    } else {
                        side_same = 1;
                        side_diff = 1;
                    }
                } else {
                    if ((start_side === 0)) {
                        side_same = 1;
                        side_diff = 1;
                    } else {
                        side_same = 0;
                        side_diff = 0;
                    }
                }
            }
        } else {
            if ((Number.parseInt(expInfo["position"]) === 1)) {
                numTrials = 24;
                trial_order = [shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6])].flat();
                trial_order = round_array(divide_subPoint1(trial_order,6))
                trialSame = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
                trialDiff = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
                diffTrial = shuffle_array(list([...Array(12).keys()]));
                fix_switch = [[0,0],shuffle_array([1,0,0]),[0],shuffle_array([1,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0]),[0,0]].flat();
            } else {
                if ((Number.parseInt(expInfo["position"]) === 3)) {
                    numTrials = 24;
                    trial_order = [shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6]), shuffle_array([1, 2, 3, 4, 5, 6])].flat();
                    trial_order = round_array(divide_subPoint1(trial_order,6))
                    trialSame = [shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3]), shuffle_array([0, 1, 2, 3])].flat();
                    trialDiff = [[0, 1], [0, 2], [0, 3], [1, 2], [1, 3], [1, 0], [2, 3], [2, 0], [2, 1], [3, 0], [3, 1], [3, 2]];
                    diffTrial = shuffle_array(list([...Array(12).keys()]));
                    fix_switch = [[0,0],shuffle_array([1,0,0]),[0],shuffle_array([1,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0]),[0],shuffle_array([1,0,0]),[0],shuffle_array([1,0]),[0,0]].flat();
                }
            }
        }
      Begin Routine:
        img_size =''
        block_count = block_count + 1
        corrFix_count = 0
        missFix_count = 0
        if Block_type == 'conf_face':
            img_size = (width*x_scale,height*y_scale)
            paths = ['Stimuli/edmd.png', 'Stimuli/eimd.png', 'Stimuli/eomu.png', 'Stimuli/eumu.png']
            if int(expInfo['design']) < 5:
                instruction_img = 'Designs/instructions_face_1234.png'
            else:
                instruction_img = 'Designs/instructions_face_5678.png'
        elif Block_type == 'conf_haus':
            img_size = (width*x_scale,height*y_scale)
            paths =  ['Stimuli/H-8sim0.png', 'Stimuli/H-8sim1.png', 'Stimuli/H-8sim2.png', 'Stimuli/H-8sim3.png']
            if int(expInfo['design']) < 5:
                instruction_img = 'Designs/instructions_haus_1234.png'
            else:
                instruction_img = 'Designs/instructions_haus_5678.png'
        elif Block_type == 'feat_face':
            img_size = (width*x_scale,height*y_scale)
            paths =  ['Stimuli/f15.png', 'Stimuli/f24.png', 'Stimuli/f131.png', 'Stimuli/f142.png']
            if int(expInfo['design']) < 5:
                instruction_img = 'Designs/instructions_face_1234.png'
            else:
                instruction_img = 'Designs/instructions_face_5678.png'
        elif Block_type == 'feat_haus':
            img_size = (width*x_scale,height*y_scale)
            paths = ['Stimuli/H5sim0.png', 'Stimuli/H6sim0.png', 'Stimuli/H7sim0.png', 'Stimuli/H8sim0.png']
            if int(expInfo['design']) < 5:
                instruction_img = 'Designs/instructions_haus_1234.png'
            else:
                instruction_img = 'Designs/instructions_haus_5678.png'

        sameTrialid = -1
        diffTrialid = -1
        sameTrial_left_id = -1
        diffTrial_left_id = -1
        sameTrial_right_id = -1
        diffTrial_right_id = -1
        trialID = -1;
        rand_start = [0,1]
        shuffle(rand_start)
        fix_color = fix_color_options[rand_start[0]]

        if int(expInfo['position']) == 2:
            trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
            trial_order = np.round(trial_order / 6 - 0.1)
            trialSame_left = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff_left = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2), (0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            trialSame_right = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff_right = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2),(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            diffTrial_left = list(range(24))
            shuffle(diffTrial_left)
            diffTrial_right = list(range(24))
            shuffle(diffTrial_right)
            numTrials = 48
            fxs_1 = [1,0,0]
            fxs_2 = [1,0,0]
            fxs_3 = [1,0,0]
            fxs_4 = [1,0,0]
            fxs_5 = [1,0,0]
            fxs_6 = [1,0,0]
            fxs_7 = [1,0,0]
            fxs_8 = [1,0,0]
            fxs_9 = [1,0,0]
            fxs_10 = [1,0,0]
            fxs_11 = [1,0,0]
            fxs_12 = [1,0,0]
            shuffle(fxs_1)
            shuffle(fxs_2)
            shuffle(fxs_3)
            shuffle(fxs_4)
            shuffle(fxs_5)
            shuffle(fxs_6)
            shuffle(fxs_7)
            shuffle(fxs_8)
            shuffle(fxs_9)
            shuffle(fxs_10)
            shuffle(fxs_11)
            shuffle(fxs_12)
            fix_switch = [0,0]+fxs_1+[0]+fxs_2+[0]+fxs_3+[0]+fxs_4+[0]+fxs_5+[0]+fxs_6+fxs_7+[0]+fxs_8+fxs_9+[0]+fxs_10+fxs_11+[0]+fxs_12+[0,0]
            if block_count == 0:
                if start_side == 0:
                    side_same = 0
                    side_diff = 0
                else:
                    side_same = 1
                    side_diff = 1
            else:
                if block_count < 5:
                    if start_side == 0:
                        side_same = 0
                        side_diff = 0
                    else:
                        side_same = 1
                        side_diff = 1
                else:
                    if start_side == 0:
                        side_same = 1
                        side_diff = 1
                    else:
                        side_same = 0
                        side_diff = 0
        elif int(expInfo['position']) == 1:
            trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
            trial_order = np.round(trial_order / 6 - 0.1)
            trialSame = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            diffTrial = list(range(12))
            shuffle(diffTrial)
            numTrials = 24
            fxs_1 = [1,0,0]
            fxs_2 = [1,0]
            fxs_3 = [1,0,0]
            fxs_4 = [1,0]
            fxs_5 = [1,0,0]
            fxs_6 = [1,0]
            shuffle(fxs_1)
            shuffle(fxs_2)
            shuffle(fxs_3)
            shuffle(fxs_4)
            shuffle(fxs_5)
            shuffle(fxs_6)
            fix_switch = [0,0]+fxs_1+[0]+fxs_2+[0]+fxs_3+[0]+fxs_4+[0]+fxs_5+[0]+fxs_6+[0,0]
        elif int(expInfo['position']) == 3:
            trial_order = np.concatenate((permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6]),permutation([1, 2, 3, 4, 5, 6])))
            trial_order = np.round(trial_order / 6 - 0.1)
            trialSame = np.concatenate((permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3]),permutation([0, 1, 2, 3])))
            trialDiff = np.array([(0, 1), (0, 2), (0, 3), (1, 2), (1, 3), (1, 0), (2, 3), (2, 0), (2, 1),(3, 0), (3, 1), (3, 2)])
            diffTrial = list(range(12))
            shuffle(diffTrial)
            numTrials = 24
            fxs_1 = [1,0,0]
            fxs_2 = [1,0]
            fxs_3 = [1,0,0]
            fxs_4 = [1,0]
            fxs_5 = [1,0,0]
            fxs_6 = [1,0]
            shuffle(fxs_1)
            shuffle(fxs_2)
            shuffle(fxs_3)
            shuffle(fxs_4)
            shuffle(fxs_5)
            shuffle(fxs_6)
            fix_switch = [0,0]+fxs_1+[0]+fxs_2+[0]+fxs_3+[0]+fxs_4+[0]+fxs_5+[0]+fxs_6+[0,0]
    ImageComponent instructions_image
      image [set every repeat] = $instruction_img
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine EndScreen
    TextComponent allDone
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You are all done. Thank you!
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  Routine feedback
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        blockMsg = 'You missed '+str(missFix_count)+' of the fix changes. Keep your eyes in the middle! \n\nPress <SPACE> to keep going!'
    TextComponent good_job
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $blockMsg
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    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prac_instructions
    CodeComponent code_6
      Code Type = Both
      Begin JS Routine:
        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        pracCorr = "";
        corrFix = "";


        numIncorr = 0;
        pTrial = 0;
        pfix_color_options = ["white", "black"];
        prac_paths = "";
        samepTrials = "";
        diffpTrials = "";
        side_same_prac = "";
        side_diff_prac = "";
        samePTrialid = 0;
        diffPTrialid = 0;
        sameCount = 0;
        diffCount = 0;
        samepTrials = [0,1,2,3,4,5,6,7];
        shuffle(samepTrials);
        diffpTrials = [[0,1],[0,2],[0,3],[1,2],[1,3],[2,3],[4,5],[4,6],[4,7],[5,6],[5,7],[6,7]];
        shuffle(diffpTrials);
        ptrial_order = [0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1];
        corrpFix = "";
        numPTrials_slow=''
        numPTrials_fast=''
        numPTrials_slow = 4
        numPTrials_fast = 4
        //pfix_switch = [0,0,shuffle_array([1,0,0,0]),shuffle_array([1,0,0,1]),0,0].flat();
        side_same_prac = [0, 0, 0, 0, 1, 1, 1, 1];
        side_diff_prac = [0, 0, 0, 0, 1, 1, 1, 1];

        rand_Pstart = [0, 1];
        shuffle(rand_Pstart);
        pfix_color = pfix_color_options[rand_Pstart[0]];
      Begin Routine:
        pracCorr=''
        prac_paths=''
        corrFix =''
        samepTrials=''
        diffpTrials=''
        numPTrials_slow=''

        numIncorr = 0
        pTrial = 0
        pfix_color_options = ['white','black']
        sameCount = 0
        diffCount = 0

        samepTrials = [0,1,2,3,4,5,6,7]
        diffpTrials = [[0,1],[0,2],[0,3],[1,2],[1,3],[2,3],[4,5],[4,6],[4,7],[5,6],[5,7],[6,7]]
        shuffle(samepTrials)
        shuffle(diffpTrials)

        ptrial_order = [0,1,0,1,0,1,0,1,0,1,0,1,0,1,0,1]

        corrpFix =''
        samePTrialid = 0
        diffPTrialid = 0
        numPTrials_slow = 4
        numPTrials_fast = 4

        side_same_prac = [0,0,0,0,1,1,1,1]
        shuffle(side_same_prac)
        side_diff_prac = [0,0,0,0,1,1,1,1]
        shuffle(side_diff_prac)

        rand_Pstart = [0,1]
        shuffle(rand_Pstart)
        pfix_color = pfix_color_options[rand_Pstart[0]]
  Routine prePrac2
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['design']) < 5:
            prePrac2 = 'Designs/prac_instr2_1234.png'
            prePrac1Corr = 'j'
        elif int(expInfo['design']) > 4:
            prePrac2 = 'Designs/prac_instr2_5678.png'
            prePrac1Corr = 'f'


        if which_first[0] == 0:
            prePracTargetImg2 = allHs[2]
            prePracProbeImg2 = allHs[2]
        elif which_first[0] == 1:
            prePracTargetImg2 = allFs[2]
            prePracProbeImg2 = allFs[2]
    ImageComponent prac_instr2
      image [set every repeat] = $prePrac2
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.2
      texture resolution = 512
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    KeyboardComponent prePrac1Resp
      allowedKeys = 'f','j'
      correctAns = $prePrac1Corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.2
      storeCorrect = True
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  Routine prePrac3
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        if prePrac1Resp.corr == 1:
            prePrac3 = 'Designs/prac_instr3_corr.png'
        elif prePrac1Resp.corr != 1:
            prePrac3 = 'Designs/prac_instr3_wrong.png'

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            xPosition = -(width4deg*x_scale)
        elif int(expInfo['position']) == 1:
            xPosition = -(width4deg*x_scale)
        elif int(expInfo['position']) == 3:
            xPosition = width4deg*x_scale
    ImageComponent prac_instr3_feedback
      image [set every repeat] = $prePrac3
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_11
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prePrac4
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        if int(expInfo['design']) < 5:
            prePrac4 = 'Designs/prac_instr4_1234.png'
            prePrac2Corr = 'f'
            prePracFix = 'space'
        elif int(expInfo['design']) > 4:
            prePrac4 = 'Designs/prac_instr4_5678.png'
            prePrac2Corr = 'j'
            prePracFix = 'space'
    ImageComponent prac_instr4
      image [set every repeat] = $prePrac4
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      texture resolution = 512
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    KeyboardComponent prePrac2_fixResp
      allowedKeys = 'space',
      correctAns = $prePracFix
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 9
      storeCorrect = True
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    KeyboardComponent prePrac2_imgResp
      allowedKeys = 'f','j'
      correctAns = $prePrac2Corr
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 9
      storeCorrect = True
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  Routine prePrac5
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        if prePrac2_imgResp.corr == 1:
            if prePrac2_fixResp.corr == 1:
                if int(expInfo['design']) < 5:
                    prePrac5 = 'Designs/prac_instr5_1234_corr.png'
                elif int(expInfo['design']) > 4:
                    prePrac5 = 'Designs/prac_instr5_5678_corr.png'
            else:
                if int(expInfo['design']) < 5:
                    prePrac5 = 'Designs/prac_instr5_1234_wrong.png'
                elif int(expInfo['design']) > 4:
                    prePrac5 = 'Designs/prac_instr5_5678_wrong.png'
        elif prePrac2_imgResp.corr != 1:
            if int(expInfo['design']) < 5:
                prePrac5 = 'Designs/prac_instr5_1234_wrong.png'
            elif int(expInfo['design']) > 4:
                prePrac5 = 'Designs/prac_instr5_5678_wrong.png'
      End Routine:
        RepIfNeeded = 1
    ImageComponent prac_instr5
      image [set every repeat] = $prePrac5
      saveStartStop = False
      size = (0.75*1.5, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_12
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine prePrac1_1
    ImageComponent image_6
      image [set every repeat] = $prePracTargetImg1
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    TextComponent text_8
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      text = +
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    ImageComponent image_7
      image [set every repeat] = $prePracProbeImg1
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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  Routine prePrac3_2
    ImageComponent image_8
      image [set every repeat] = $prePracTargetImg2
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      text = +
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    ImageComponent image_9
      image [set every repeat] = $prePracProbeImg2
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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  Routine check_scale
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Experiment:
        width_card = 8.5
        height_card = 5.2
    PolygonComponent polygon
      fillColor = $[1,1,1]
      shape = rectangle
      size [set every repeat] = $(height_card*x_scale,width_card*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine ITI_fix
    CodeComponent code_14
      Code Type = Both
      Begin JS Routine:
        if ((fix_switch[trialID] === 1)) {
            if ((fix_color === "white")) {
                fix_color = fix_color_options[1];
                corrFix_resp = "space";
            } else {
                fix_color = fix_color_options[0];
                corrFix_resp = "space";
            }
        } else {
            fix_color = fix_color;
            corrFix_resp = undefined;
        }
        a = 1.25;
        b = 1.75;
        fixDur = (((b - a) * random()) + a);
      Begin Routine:
        if fix_switch[trialID] == 1:
            if fix_color == "white":
                fix_color = fix_color_options[1]
                corrFix_resp = 'space'
            else:
                fix_color = fix_color_options[0]
                corrFix_resp = 'space'
        else:
            fix_color = fix_color
            corrFix_resp = None

        a = 1.25 # min ITI
        b = 1.75 # max ITI
        fixDur = (b-a) * random()+a
      End JS Routine:
        if ((fix_switch[trialID] === 1)) {
            if ((fix_resp.keys === corrFix_resp)) {
                corrFix_count = (corrFix_count + 1);
            } else {
                missFix_count = (missFix_count + 1);
            }
        }


        console.log(corrFix_count)
        console.log(missFix_count)
      End Routine:
        if fix_switch[trialID] == 1:
            if fix_resp.corr == 1:
                corrFix_count = corrFix_count + 1
            else:
                missFix_count = missFix_count + 1
    TextComponent ITI_fix_cross
      color [set every repeat] = $fix_color
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      text = +
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    KeyboardComponent fix_resp
      allowedKeys = 'space',
      correctAns = $corrFix_resp
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixDur
      storeCorrect = True
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  Routine prac_target_slow
    CodeComponent code_7
      Code Type = Both
      Begin JS Routine:
        xPosition = "";
        if ((which_first[0] === 0)) {
            if ((pTrial < 8)) {
                prac_paths = allHs;
                prac_paths = allHs;
            } else {
                if ((pTrial > 7)) {
                    prac_paths = allFs;
                    prac_paths = allFs;
                }
            }
        } else {
            if ((which_first[0] === 1)) {
                if ((pTrial < 8)) {
                    prac_paths = allFs;
                    prac_paths = allFs;
                } else {
                    if ((pTrial > 7)) {
                        prac_paths = allHs;
                        prac_paths = allHs;
                    }
                }
            }
        }

        if ((pFixs[pBlockTrial] === 1)) {
            corrPfix = "space";
            if ((pfix_color === "white")) {
                pfix_color = pfix_color_options[1];
            } else {
                pfix_color = pfix_color_options[0];
            }
        } else {
            pfix_color = pfix_color;
            corrPfix = undefined;
        }



        if ((ptrial_order[pTrial] === 0)) {
            prac_target = prac_paths[samepTrials[sameCount]];
            prac_probe = prac_paths[samepTrials[sameCount]];
            if ((Number.parseInt(expInfo["design"]) < 5)) {
                pracCorr = "f";
            } else {
                if ((Number.parseInt(expInfo["design"]) > 4)) {
                    pracCorr = "j";
                }
            }
            sameCount = (sameCount + 1);
        } else {
            if ((ptrial_order[pTrial] === 1)) {
                prac_target = prac_paths[diffpTrials[diffCount][0]];
                prac_probe = prac_paths[diffpTrials[diffCount][1]];
                if ((Number.parseInt(expInfo["design"]) < 5)) {
                    pracCorr = "j";
                } else {
                    if ((Number.parseInt(expInfo["design"]) > 4)) {
                        pracCorr = "f";
                    }
                }
                diffCount = (diffCount + 1);
            } else {
                console.log("What is going on");
            }
        }
        if ((Number.parseInt(expInfo["position"]) === 0)) {
            xPosition = 0;
        } else {
            if ((Number.parseInt(expInfo["position"]) === 2)) {
                if ((ptrial_order[pTrial] === 1)) {
                    if ((side_same_prac[samePTrialid] === 1)) {
                        xPosition = (- (width4deg * x_scale));
                    } else {
                        if ((side_same_prac[samePTrialid] === 0)) {
                            xPosition = (width4deg * x_scale);
                        }
                    }
                    samePTrialid += 1;
                } else {
                    if ((ptrial_order[pTrial] === 0)) {
                        if ((side_diff_prac[diffPTrialid] === 1)) {
                            xPosition = (- (width4deg * x_scale));
                        } else {
                            if ((side_diff_prac[diffPTrialid] === 0)) {
                                xPosition = (width4deg * x_scale);
                            }
                        }
                        diffPTrialid += 1;
                    }
                }
            } else {
                if ((Number.parseInt(expInfo["position"]) === 1)) {
                    xPosition = (- (width4deg * x_scale));
                } else {
                    if ((Number.parseInt(expInfo["position"]) === 3)) {
                        xPosition = (width4deg * x_scale);
                    }
                }
            }
        }

        thisExp.addData("pfix_switches", pFixs[pBlockTrial]);
        thisExp.addData("Pside", xPosition);
        thisExp.addData("ptrial_type1S0D", ptrial_order[pTrial]);
        thisExp.addData("ptarget", prac_target);
        thisExp.addData("pprobe", prac_probe);
      Begin Routine:
        xPosition =''

        if which_first[0] == 0:
            if pTrial < 8:
                prac_paths = allHs
                prac_paths = allHs
            elif pTrial > 7:
                prac_paths = allFs
                prac_paths = allFs
        elif which_first[0] == 1:
            if pTrial < 8:
                prac_paths = allFs
                prac_paths = allFs
            elif pTrial > 7:
                prac_paths = allHs
                prac_paths = allHs

        if pFixs[pBlockTrial] == 1:
            corrPfix = 'space'
            if pfix_color == "white":
                pfix_color = pfix_color_options[1]
            else:
                pfix_color = pfix_color_options[0]
        else:
            pfix_color = pfix_color
            corrPfix = None

        if ptrial_order[pTrial] == 0:
            prac_target = prac_paths[samepTrials[sameCount]]
            prac_probe = prac_paths[samepTrials[sameCount]]
            if int(expInfo['design']) < 5:
                pracCorr = 'f'
            elif int(expInfo['design']) > 4:
                pracCorr = 'j'
            sameCount = sameCount + 1
        elif ptrial_order[pTrial] == 1:
            prac_target = prac_paths[diffpTrials[diffCount][0]]
            prac_probe = prac_paths[diffpTrials[diffCount][1]]
            if int(expInfo['design']) < 5:
                pracCorr = 'j'
            elif int(expInfo['design']) > 4:
                pracCorr = 'f'
            diffCount = diffCount + 1
        else:
            print('What is going on')

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            if ptrial_order[pTrial]==1:
                if side_same_prac[samePTrialid] == 1: #left
                    xPosition = -(width4deg*x_scale)
                elif side_same_prac[samePTrialid] == 0: #right
                    xPosition = width4deg*x_scale
                samePTrialid += 1
            elif ptrial_order[pTrial]==0:
                if side_diff_prac[diffPTrialid] == 1: #left
                    xPosition = -(width4deg*x_scale)
                elif side_diff_prac[diffPTrialid] == 0: #right
                    xPosition = width4deg*x_scale
                diffPTrialid += 1
        elif int(expInfo['position']) == 1:
            xPosition = -(width4deg*x_scale)
        elif int(expInfo['position']) == 3:
            xPosition = width4deg*x_scale

        thisExp.addData('pfix_switches', pFixs[pBlockTrial])
        thisExp.addData('Pside', xPosition)
        thisExp.addData('ptrial_type1S0D',ptrial_order[pTrial])
        thisExp.addData('ptarget',prac_target)
        thisExp.addData('pprobe',prac_probe)
    ImageComponent image
      image [set every repeat] = $prac_target
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    TextComponent text_6
      color [set every repeat] = $pfix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text = +
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  Routine prac_probe_slow
    ImageComponent image_2
      image [set every repeat] = $prac_probe
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      texture resolution = 512
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    TextComponent text_7
      color [set every repeat] = $pfix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
      text = +
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    KeyboardComponent prac_resp
      allowedKeys = 'f','j'
      correctAns = $pracCorr
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4.8
      storeCorrect = True
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    KeyboardComponent prac_fix_resp
      allowedKeys = 'space',
      correctAns = $corrPfix
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4.8
      storeCorrect = True
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  Routine prac_target_fast
    CodeComponent code_15
      Code Type = Both
      Begin JS Routine:
        xPosition = "";


        if ((pFixs[pBlockTrial] === 1)) {
            corrPfix = "space";
            if ((pfix_color === "white")) {
                pfix_color = pfix_color_options[1];
            } else {
                pfix_color = pfix_color_options[0];
            }
        } else {
            pfix_color = pfix_color;
            corrPfix = undefined;
        }


        if ((ptrial_order[pTrial] === 0)) {
            prac_target = prac_paths[samepTrials[sameCount]];
            prac_probe = prac_paths[samepTrials[sameCount]];
            if ((Number.parseInt(expInfo["design"]) < 5)) {
                pracCorr = "f";
            } else {
                if ((Number.parseInt(expInfo["design"]) > 4)) {
                    pracCorr = "j";
                }
            }
            sameCount = (sameCount + 1);
        } else {
            if ((ptrial_order[pTrial] === 1)) {
                prac_target = prac_paths[diffpTrials[diffCount][0]];
                prac_probe = prac_paths[diffpTrials[diffCount][1]];
                if ((Number.parseInt(expInfo["design"]) < 5)) {
                    pracCorr = "j";
                } else {
                    if ((Number.parseInt(expInfo["design"]) > 4)) {
                        pracCorr = "f";
                    }
                }
                diffCount = (diffCount + 1);
            } else {
                console.log("What is going on");
            }
        }
        if ((Number.parseInt(expInfo["position"]) === 0)) {
            xPosition = 0;
        } else {
            if ((Number.parseInt(expInfo["position"]) === 2)) {
                if ((ptrial_order[pTrial] === 1)) {
                    if ((side_same_prac[samePTrialid] === 1)) {
                        xPosition = (- (width4deg * x_scale));
                    } else {
                        if ((side_same_prac[samePTrialid] === 0)) {
                            xPosition = (width4deg * x_scale);
                        }
                    }
                    samePTrialid += 1;
                } else {
                    if ((ptrial_order[pTrial] === 0)) {
                        if ((side_diff_prac[diffPTrialid] === 1)) {
                            xPosition = (- (width4deg * x_scale));
                        } else {
                            if ((side_diff_prac[diffPTrialid] === 0)) {
                                xPosition = (width4deg * x_scale);
                            }
                        }
                        diffPTrialid += 1;
                    }
                }
            } else {
                if ((Number.parseInt(expInfo["position"]) === 1)) {
                    xPosition = (- (width4deg * x_scale));
                } else {
                    if ((Number.parseInt(expInfo["position"]) === 3)) {
                        xPosition = (width4deg * x_scale);
                    }
                }
            }
        }

        thisExp.addData("pfix_switches", pFixs[pBlockTrial]);
        thisExp.addData("Pside", xPosition);
        thisExp.addData("ptrial_type1S0D", ptrial_order[pTrial]);
        thisExp.addData("ptarget", prac_target);
        thisExp.addData("pprobe", prac_probe);
      Begin Routine:
        xPosition =''

        if pFixs[pBlockTrial] == 1:
            corrPfix = 'space'
            if pfix_color == "white":
                pfix_color = pfix_color_options[1]
            else:
                pfix_color = pfix_color_options[0]
        else:
            pfix_color = pfix_color
            corrPfix = None

        if ptrial_order[pTrial] == 0:
            prac_target = prac_paths[samepTrials[sameCount]]
            prac_probe = prac_paths[samepTrials[sameCount]]
            if int(expInfo['design']) < 5:
                pracCorr = 'f'
            elif int(expInfo['design']) > 4:
                pracCorr = 'j'
            sameCount = sameCount + 1
        elif ptrial_order[pTrial] == 1:
            prac_target = prac_paths[diffpTrials[diffCount][0]]
            prac_probe = prac_paths[diffpTrials[diffCount][1]]
            if int(expInfo['design']) < 5:
                pracCorr = 'j'
            elif int(expInfo['design']) > 4:
                pracCorr = 'f'
            diffCount = diffCount + 1
        else:
            print('What is going on')

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            if ptrial_order[pTrial]==1:
                if side_same_prac[samePTrialid] == 1: #left
                    xPosition = -(width4deg*x_scale)
                elif side_same_prac[samePTrialid] == 0: #right
                    xPosition = width4deg*x_scale
                samePTrialid += 1
            elif ptrial_order[pTrial]==0:
                if side_diff_prac[diffPTrialid] == 1: #left
                    xPosition = -(width4deg*x_scale)
                elif side_diff_prac[diffPTrialid] == 0: #right
                    xPosition = width4deg*x_scale
                diffPTrialid += 1
        elif int(expInfo['position']) == 1:
            xPosition = -(width4deg*x_scale)
        elif int(expInfo['position']) == 3:
            xPosition = width4deg*x_scale

        thisExp.addData('pfix_switches', pFixs[pBlockTrial])
        thisExp.addData('Pside', xPosition)
        thisExp.addData('ptrial_type1S0D',ptrial_order[pTrial])
        thisExp.addData('ptarget',prac_target)
        thisExp.addData('pprobe',prac_probe)
    ImageComponent image_4
      image [set every repeat] = $prac_target
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent text_10
      color [set every repeat] = $pfix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine prac_probe_fast
    ImageComponent image_5
      image [set every repeat] = $prac_probe
      pos [set every repeat] = $(xPosition, 0)
      saveStartStop = False
      size [set every repeat] = $(width*x_scale,height*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      texture resolution = 512
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    TextComponent text_11
      color [set every repeat] = $pfix_color
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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    KeyboardComponent prac_fix_resp_fast
      allowedKeys = 'space'
      correctAns = $corrPfix
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4.8
      storeCorrect = True
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    KeyboardComponent prac_resp2
      allowedKeys = 'f','j'
      correctAns = $pracCorr
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 4.8
      storeCorrect = True
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  Routine fast_warning
    TextComponent transition
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        Good job!

        Now the pictures are going to go a little faster.
    CodeComponent code_17
      Code Type = Both
      Begin JS Routine:
        pBlockTrial = 0;
        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        pFixs = [0,shuffle_array([0,1]),0].flat();
      Begin Routine:
        pBlockTrial = 0

        pFixSwitch = [0,1]
        shuffle(pFixSwitch)
        pFixs = [0] + pFixSwitch + [0]
  Routine prac_intro
    CodeComponent code_16
      Code Type = Both
      Begin JS Routine:
        function shuffle_array(array) {
            for (let i = array.length - 1; i > 0; i--) {
                let j = Math.floor(Math.random() * (i + 1)); // random index from 0 to i

                    // swap elements array[i] and array[j]
                    // we use "destructuring assignment" syntax to achieve that
                    // you'll find more details about that syntax in later chapters
                    // same can be written as:
                    // let t = array[i]; array[i] = array[j]; array[j] = t
                [array[i], array[j]] = [array[j], array[i]];
            }
            return array
        }

        pFixs = [0,shuffle_array([0,1]),0].flat();

        if ((Number.parseInt(expInfo["design"]) < 5)) {
            if ((which_first[0] === 1)) {
                if ((pTrial < 8)) {
                    prac_intro_msg = "This practice is with the Smith sisters. \n\nRemember, if you see the same sister, press F. If you see two different sisters, press J.";
                } else {
                    prac_intro_msg = "Good job! This practice is with the neighborhood houses. \n\nIf you see the same house, press F. If you see two different houses, press J.";
                }
            } else {
                if ((which_first[0] === 0)) {
                    if ((pTrial < 8)) {
                        prac_intro_msg = "This practice is with the neighborhood houses. \n\nRemember, if you see \nthe same house, press F. If you see two different houses, press J.";
                    } else {
                        prac_intro_msg = "Good job! This practice is with the Smith sisters. \n\nIf you see the same sister, press F. If you see two different sisters, press J.";
                    }
                }
            }
        } else {
            if ((Number.parseInt(expInfo["design"]) > 4)) {
                if ((which_first[0] === 1)) {
                    if ((pTrial < 8)) {
                        prac_intro_msg = "This practice is with the Smith sisters. \n\nRemember, if you see the same sister, press J. If you see two different sisters, press F.";
                    } else {
                        prac_intro_msg = "Good job! This practice with the houses in their neighborhood. \n\nIf you see the same house, press J. \nIf you see two different houses, press F.";
                    }
                } else {
                    if ((which_first[0] === 0)) {
                        if ((pTrial < 8)) {
                            prac_intro_msg = "This practice is with the houses in the Smith's neighborhood. \n\nRemember, if you see the same house, press J. If you see two different houses, press F.";
                        } else {
                            prac_intro_msg = "Good job! This practice is with the Smith sisters. \n\nIf you see the same sister, press J. If you see two different sisters, press F.";
                        }
                    }
                }
            }
        }

        pBlockTrial = 0;
      Begin Routine:
        pFixSwitch = [0,1]
        shuffle(pFixSwitch)
        pFixs = [0] + pFixSwitch + [0]

        if int(expInfo['design']) < 5:
            if which_first[0] == 1:
                if pTrial < 8:
                    prac_intro_msg = 'This practice is with the Smith sisters. \nRemember, if you see the same sister, press F. \nIf you see two different sisters, press J.'
                else:
                    prac_intro_msg = 'Good job! Now we are going to practice with the houses in their neighborhood. \nIf you see the same house, press F. \nIf you see two different houses, press J.'
            elif which_first[0] == 0:
                if pTrial < 8:
                    prac_intro_msg = 'This practice is with the houses in the Smith\'s neighborhood. \nRemember, if you see \nthe same house, press F. \nIf you see two different houses, press J.'
                else:
                    prac_intro_msg = 'Good job! This practice is with the Smith sisters. \nIf you see the same sister, press F. \nIf you see two different sisters, press J.'
        elif int(expInfo['design']) > 4:
            if which_first[0] == 1:
                if pTrial < 8:
                    prac_intro_msg = 'This practice is with the Smith sisters. \nRemember, if you see the same sister, press J. \nIf you see two different sisters, press F.'
                else:
                    prac_intro_msg = 'Good job! Now we are going to practice with the houses in their neighborhood. \nIf you see the same house, press J. \nIf you see two different houses, press F.'
            elif which_first[0] == 0:
                if pTrial < 8:
                    prac_intro_msg = 'This practice is with the houses in the Smith\'s neighborhood. \nRemember, if you see \nthe same house, press J. \nIf you see two different houses, press F.'
                else:
                    prac_intro_msg = 'Good job! This practice is with the Smith sisters. \nIf you see the same sister, press J. \nIf you see two different sisters, press F.'


        pBlockTrial = 0
    TextComponent text_12
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
      text [set every repeat] = $prac_intro_msg
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  Routine intro_task
    TextComponent text_13
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In this game, you are going to  see pictures of the Smith family  and the houses in their neighborhood.

        Press <Space> to see what they look like!
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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  Routine intro_images
    ImageComponent image_10
      image = Designs/smith_sisters.png
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      texture resolution = 512
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    ImageComponent image_11
      image = Designs/smith_houses.png
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 6
      stopVal [duration (s)] = 5.5
      texture resolution = 512
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  Routine prePrac1
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        prePrac1 = 'Designs/prac_instr1.png'

        all_paths_prac = ['Stimuli/H8sim0.png', 'Stimuli/H7sim0.png', 'Stimuli/H6sim0.png', 'Stimuli/H5sim0.png', 'Stimuli/H-8sim0.png', 'Stimuli/H-8sim1.png', 'Stimuli/H-8sim2.png', 'Stimuli/H-8sim3.png', 'Stimuli/eomu.png', 'Stimuli/eumu.png', 'Stimuli/edmd.png', 'Stimuli/eimd.png', 'Stimuli/f15.png', 'Stimuli/f24.png', 'Stimuli/f131.png', 'Stimuli/f142.png']
        feat_H_paths_prac = ['Stimuli/H8sim0.png', 'Stimuli/H7sim0.png', 'Stimuli/H6sim0.png', 'Stimuli/H5sim0.png']
        conf_H_paths_prac = ['Stimuli/H-8sim0.png', 'Stimuli/H-8sim1.png', 'Stimuli/H-8sim2.png', 'Stimuli/H-8sim3.png']
        feat_F_paths_prac = ['Stimuli/eomu.png', 'Stimuli/eumu.png', 'Stimuli/edmd.png', 'Stimuli/eimd.png']
        conf_F_paths_prac = ['Stimuli/f15.png', 'Stimuli/f24.png', 'Stimuli/131.png', 'Stimuli/142.png']

        allHs = all_paths_prac[0:8]
        shuffle(allHs)
        allFs = all_paths_prac[8:16]
        shuffle(allFs)
        which_first = [0,1]
        shuffle(which_first)

        if which_first[0] == 0:
            prePracTargetImg1 = allHs[0]
            prePracProbeImg1 = allHs[1]
        elif which_first[0] == 1:
            prePracTargetImg1 = allFs[0]
            prePracProbeImg1 = allFs[1]

        if int(expInfo['position']) == 0:
            xPosition = 0
        elif int(expInfo['position']) == 2:
            xPosition = (width4deg*x_scale)
        elif int(expInfo['position']) == 1:
            xPosition = -(width4deg*x_scale)
        elif int(expInfo['position']) == 3:
            xPosition = width4deg*x_scale
    ImageComponent prac_instr1
      image [set every repeat] = $prePrac1
      saveStartStop = False
      size = (0.75*1.77, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent key_resp_9
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
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  Routine prac_feedback_fast
    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Routine:
        feedIM =''
        if prac_resp2.corr == 1:
            if prac_fix_resp_fast.corr == 1:
                feedIM = 'Stimuli/greenCheck.png'
                prac_msg = 'Well done!'
            elif prac_fix_resp_fast.corr != 1:
                feedIM = 'Stimuli/redWrong.png'
                if pFixs[pBlockTrial] == 1:
                    prac_msg = 'Oops, you missed the cross change.'
                else:
                    prac_msg = 'Oops, you pressed space when the cross didn\'t change.'
                numIncorr = numIncorr + 1
        elif prac_resp2.corr != 1:
            if prac_fix_resp_fast.corr == 1:
                feedIM = 'Stimuli/redWrong.png'
                if pFixs[pBlockTrial] == 1:
                    prac_msg = 'Good job, you saw the cross change! But the picture response was wrong.'
                else:
                    prac_msg = 'Oops, your picture response was wrong.'
                numIncorr = numIncorr + 1
            elif prac_fix_resp_fast.corr != 1:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, both responses were wrong.'
                numIncorr = numIncorr + 1
      End Routine:
        pTrial = pTrial + 1
        pBlockTrial = pBlockTrial + 1
    ImageComponent image_12
      image [set every repeat] = $feedIM
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    TextComponent text_14
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $prac_msg
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  Routine prac_feedback_slow
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        feedIM =''
        if prac_resp.corr == 1:
            if prac_fix_resp.corr == 1:
                feedIM = 'Stimuli/greenCheck.png'
                prac_msg = 'Well done!'
            elif prac_fix_resp.corr != 1:
                feedIM = 'Stimuli/redWrong.png'
                if pFixs[pBlockTrial] == 1:
                    prac_msg = 'Oops, you missed the cross change.'
                else:
                    prac_msg = 'Oops, you pressed space when the cross didn\'t change.'
                numIncorr = numIncorr + 1
        elif prac_resp.corr != 1:
            if prac_fix_resp.corr == 1:
                feedIM = 'Stimuli/redWrong.png'
                if pFixs[pBlockTrial] == 1:
                    prac_msg = 'Good job, you saw the cross change! But the picture response was wrong.'
                else:
                    prac_msg = 'Oops, your picture response was wrong.'
                numIncorr = numIncorr + 1
            elif prac_fix_resp.corr != 1:
                feedIM = 'Stimuli/redWrong.png'
                prac_msg = 'Oops, both responses were wrong.'
                numIncorr = numIncorr + 1
      End Routine:
        pTrial = pTrial + 1
        pBlockTrial = pBlockTrial + 1
    ImageComponent image_3
      image [set every repeat] = $feedIM
      saveStartStop = False
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      texture resolution = 512
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    TextComponent feedback_msg
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $prac_msg
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  Routine end_prac_loop
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        print(numIncorr)

        if numIncorr < 5:
            repPracLoop.finished = true
        else:
            repeatMsg = 'You missed '+str(numIncorr)+' of the 16 trials. That\'s ok! \n\nPress <SPACE> to try some more practice! \nKeep your eyes in the middle!'
    TextComponent text_15
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $repeatMsg
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine screen_scale
  Routine intro_task
  Routine intro_images
  Routine prePrac1
  Routine prePrac1_1
  Routine prePrac2
  Routine prePrac3
  Routine prePrac3_2
  Routine prePrac4
  Routine prePrac5
  LoopInitiator repPracLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    Routine prac_instructions
    LoopInitiator pTrials loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine prac_intro
      LoopInitiator pTrials_slow loopType="TrialHandler"
        loopType = random
        nReps = $numPTrials_slow
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        Routine prac_target_slow
        Routine prac_probe_slow
        Routine prac_feedback_slow
      LoopTerminator pTrials_slow
      Routine fast_warning
      LoopInitiator pTrials_fast loopType="TrialHandler"
        loopType = random
        nReps = $numPTrials_fast
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        Routine prac_target_fast
        Routine prac_probe_fast
        Routine prac_feedback_fast
      LoopTerminator pTrials_fast
    LoopTerminator pTrials
    Routine end_prac_loop
  LoopTerminator repPracLoop
  Routine startInstruct
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = $design_file
    isTrials = False
    loopType = sequential
    nReps = 2
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    Routine instrBlock
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = $numTrials
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      Routine target_img
      Routine ISI_fix
      Routine probe_img
      Routine trial_resp
      Routine ITI_fix
    LoopTerminator trials
    Routine feedback
  LoopTerminator blocks
  Routine EndScreen
